OpenViBE-Scenario

Generic stream reader => #0
  Filename = C:/Users/Takumi Kodama/Dropbox/OpenViBE(Graz)/hybrid-TK/[2-Hybrid] AcquiredSignalFiles/[2016.01.23-14.46.56]AcquiredSignal(ALL).ov
#0.Output stream 3 -> Stimulation Filter "Stimulus 1-4+5" => #1
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_05
Input stream 1=#0.Output stream 1, Input stream 2=#0.Output stream 2, Input stream 3=#1 -> Identity => #2
#2.Output stream 2 -> Stimulation Filter "Stimulus 1" => #3
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
#2.Output stream 2 -> Stimulation Filter "Stimulus 2" => #4
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_02
  Stimulation range end = OVTK_StimulationId_Label_02
#2.Output stream 2 -> Stimulation Filter "Stimulus 3" => #5
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_03
  Stimulation range end = OVTK_StimulationId_Label_03
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 3 -> Identity "Stimulus Onsets" => #6
#6.Output stream 1 -> Identity => #7
New input[0]=#3, New input[1]=#6.Output stream 2 -> Target-NonTarget-Separator => #8
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#7, Input stimulations=#8.Stimulations -> Stimulation based epoching => #9
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/SBE_Duration-0.4_Offset-0.1.cfg
#9.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/SeparatedCSV/[$core{date}-$core{time}]-no1-target-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#7, Input stimulations=#8.New output -> Stimulation based epoching => #11
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/SBE_Duration-0.4_Offset-0.1.cfg
#11.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/SeparatedCSV/[$core{date}-$core{time}]-no1-nontarget-signal.csv
  Column separator = ;
  Precision = 10
#6.Output stream 1 -> Identity => #13
New input[0]=#4, New input[1]=#6.Output stream 2 -> Target-NonTarget-Separator => #14
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#13, Input stimulations=#14.Stimulations -> Stimulation based epoching => #15
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/SBE_Duration-0.4_Offset-0.1.cfg
#15.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/SeparatedCSV/[$core{date}-$core{time}]-no2-target-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#13, Input stimulations=#14.New output -> Stimulation based epoching => #17
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/SBE_Duration-0.4_Offset-0.1.cfg
#17.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/SeparatedCSV/[$core{date}-$core{time}]-no2-nontarget-signal.csv
  Column separator = ;
  Precision = 10
#6.Output stream 1 -> Identity => #19
New input[0]=#5, New input[1]=#6.Output stream 2 -> Target-NonTarget-Separator => #20
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#19, Input stimulations=#20.New output -> Stimulation based epoching => #21
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/SBE_Duration-0.4_Offset-0.1.cfg
#21.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/SeparatedCSV/[$core{date}-$core{time}]-no3-nontarget-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#19, Input stimulations=#20.Stimulations -> Stimulation based epoching => #23
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/SBE_Duration-0.4_Offset-0.1.cfg
#23.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/SeparatedCSV/[$core{date}-$core{time}]-no3-target-signal.csv
  Column separator = ;
  Precision = 10
#6.Output stream 1 -> Identity => #25
#6.Output stream 1 -> 0xc73e83ec Identity => #26
#6.Output stream 1 -> 0xc73e83ec Identity => #27
#2.Output stream 2 -> 0xc73e83ec Stimulation Filter "Stimulus 5" => #28
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_05
  Stimulation range end = OVTK_StimulationId_Label_05
New input[0]=#28, New input[1]=#6.Output stream 2 -> 0xc73e83ec Target-NonTarget-Separator => #29
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#26, Input stimulations=#29.Stimulations -> 0xc73e83ec Stimulation based epoching => #30
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/SBE_Duration-0.4_Offset-0.1.cfg
#30.Epoched signal -> 0xc73e83ec CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/SeparatedCSV/[$core{date}-$core{time}]-no5-target-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#26, Input stimulations=#29.New output -> 0xc73e83ec Stimulation based epoching => #32
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/SBE_Duration-0.4_Offset-0.1.cfg
#32.Epoched signal -> 0xc73e83ec CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/SeparatedCSV/[$core{date}-$core{time}]-no5-nontarget-signal.csv
  Column separator = ;
  Precision = 10
#2.Output stream 2 -> 0xc73e83ec Stimulation Filter "Stimulus 6" => #34
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_06
  Stimulation range end = OVTK_StimulationId_Label_06
New input[0]=#34, New input[1]=#6.Output stream 2 -> 0xc73e83ec Target-NonTarget-Separator => #35
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#27, Input stimulations=#35.Stimulations -> 0xc73e83ec Stimulation based epoching => #36
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/SBE_Duration-0.4_Offset-0.1.cfg
#36.Epoched signal -> 0xc73e83ec CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/SeparatedCSV/[$core{date}-$core{time}]-no6-target-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#27, Input stimulations=#35.New output -> 0xc73e83ec Stimulation based epoching => #38
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/SBE_Duration-0.4_Offset-0.1.cfg
#38.Epoched signal -> 0xc73e83ec CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/SeparatedCSV/[$core{date}-$core{time}]-no6-nontarget-signal.csv
  Column separator = ;
  Precision = 10
#2.Output stream 2 -> Stimulation Filter "Stimulus 4" => #40
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_04
  Stimulation range end = OVTK_StimulationId_Label_04
New input[0]=#40, New input[1]=#6.Output stream 2 -> Target-NonTarget-Separator => #41
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#25, Input stimulations=#41.Stimulations -> Stimulation based epoching => #42
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/SBE_Duration-0.4_Offset-0.1.cfg
#42.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/SeparatedCSV/[$core{date}-$core{time}]-no4-target-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#25, Input stimulations=#41.New output -> Stimulation based epoching => #44
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/SBE_Duration-0.4_Offset-0.1.cfg
#44.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/SeparatedCSV/[$core{date}-$core{time}]-no4-nontarget-signal.csv
  Column separator = ;
  Precision = 10
Input stream 1=#0.Output stream 1, Input stream 2=#0.Output stream 2, Input stream 3=#0.Output stream 3 -> Identity => #46
#46.Output stream 1 -> Identity => #47
New input[0]=#46.Output stream 2, New input[1]=#46.Output stream 3 -> Target-NonTarget-Separator => #48
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#47, Input stimulations=#48.Stimulations -> Stimulation based epoching => #49
  Epoch duration (in sec) = 0.4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/SBE_Duration-0.4_Offset-0.1.cfg
#49.Epoched signal -> CSV File Writer "All-Target-Signal"
  Filename = ${Player_ScenarioDirectory}/SeparatedCSV/[$core{date}-$core{time}]-all-target-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#47, Input stimulations=#48.New output -> Stimulation based epoching => #51
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_VEP
  0x8d21ff41 = ${Player_ScenarioDirectory}/SBE_Duration-0.4_Offset-0.1.cfg
#51.Epoched signal -> CSV File Writer "All-NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/SeparatedCSV/[$core{date}-$core{time}]-all-nontarget-signal.csv
  Column separator = ;
  Precision = 10
Data=#0.Output stream 1, Stimulations=#0.Output stream 2 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
