OpenViBE-Scenario

0xc67a01dc Generic stream reader => #0
  Filename = C:/Users/Takumi Kodama/Dropbox/OpenViBE(Graz)/p300-original-TK/[3-4ch] ExperimentalSignalFiles/[2015.12.02-16.27.15]summerized-record.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Identity => #2
New input[0]=#1.Output stream 2, New input[1]=#0.Output stream 4 -> Target-NonTarget-Separator => #3
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#2, Input stimulations=#3.Stimulations -> Stimulation based epoching => #4
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#4.Epoched signal -> CSV File Writer "All-Target-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-all-target-signal.csv
  Column separator = ;
  Precision = 10
#4.Resynced stimulations -> 0xc73e83ec CSV File Writer "All-Target-Onset"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-all-target-onset.csv
  Column separator = ;
  Precision = 10
Input signal=#2, Input stimulations=#3.New output -> Stimulation based epoching => #7
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#7.Epoched signal -> CSV File Writer "All-NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-all-nontarget-signal.csv
  Column separator = ;
  Precision = 10
#7.Resynced stimulations -> 0xc73e83ec CSV File Writer "All-NonTarget-Onset"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-all-nontarget-onset.csv
  Column separator = ;
  Precision = 10
Data=#0.Output stream 2, Stimulations=#0.Output stream 3 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #11
#11.Output stream 2 -> Stimulation Filter "Stimulus 1" => #12
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
#11.Output stream 2 -> Stimulation Filter "Stimulus 2" => #13
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_02
  Stimulation range end = OVTK_StimulationId_Label_02
#11.Output stream 2 -> Stimulation Filter "Stimulus 3" => #14
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_03
  Stimulation range end = OVTK_StimulationId_Label_03
Input stream 1=#0.Output stream 4, Input stream 2=#11.Output stream 1 -> Identity "Stimulus Onsets" => #15
#15.Output stream 2 -> Identity => #16
New input[0]=#12, New input[1]=#15.Output stream 1 -> Target-NonTarget-Separator => #17
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#16, Input stimulations=#17.Stimulations -> Stimulation based epoching => #18
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#18.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no1-target-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#16, Input stimulations=#17.New output -> Stimulation based epoching => #20
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#20.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no1-nontarget-signal.csv
  Column separator = ;
  Precision = 10
#15.Output stream 2 -> Identity => #22
New input[0]=#13, New input[1]=#15.Output stream 1 -> Target-NonTarget-Separator => #23
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#22, Input stimulations=#23.Stimulations -> Stimulation based epoching => #24
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#24.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no2-target-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#22, Input stimulations=#23.New output -> Stimulation based epoching => #26
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#26.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no2-nontarget-signal.csv
  Column separator = ;
  Precision = 10
#15.Output stream 2 -> Identity => #28
New input[0]=#14, New input[1]=#15.Output stream 1 -> Target-NonTarget-Separator => #29
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#28, Input stimulations=#29.Stimulations -> Stimulation based epoching => #30
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#30.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no3-target-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#28, Input stimulations=#29.New output -> Stimulation based epoching => #32
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#32.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no3-nontarget-signal.csv
  Column separator = ;
  Precision = 10
#15.Output stream 2 -> Identity => #34
#15.Output stream 2 -> Identity => #35
#15.Output stream 2 -> Identity => #36
#11.Output stream 2 -> Stimulation Filter "Stimulus 5" => #37
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_05
  Stimulation range end = OVTK_StimulationId_Label_05
New input[0]=#37, New input[1]=#15.Output stream 1 -> Target-NonTarget-Separator => #38
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#35, Input stimulations=#38.Stimulations -> Stimulation based epoching => #39
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#39.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no5-target-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#35, Input stimulations=#38.New output -> Stimulation based epoching => #41
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#41.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no5-nontarget-signal.csv
  Column separator = ;
  Precision = 10
#11.Output stream 2 -> Stimulation Filter "Stimulus 6" => #43
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_06
  Stimulation range end = OVTK_StimulationId_Label_06
New input[0]=#43, New input[1]=#15.Output stream 1 -> Target-NonTarget-Separator => #44
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#36, Input stimulations=#44.Stimulations -> Stimulation based epoching => #45
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#45.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no6-target-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#36, Input stimulations=#44.New output -> Stimulation based epoching => #47
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#47.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no6-nontarget-signal.csv
  Column separator = ;
  Precision = 10
#11.Output stream 2 -> Stimulation Filter "Stimulus 4" => #49
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_04
  Stimulation range end = OVTK_StimulationId_Label_04
New input[0]=#49, New input[1]=#15.Output stream 1 -> Target-NonTarget-Separator => #50
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#34, Input stimulations=#50.Stimulations -> Stimulation based epoching => #51
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#51.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no4-target-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#34, Input stimulations=#50.New output -> Stimulation based epoching => #53
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#53.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no4-nontarget-signal.csv
  Column separator = ;
  Precision = 10
